PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring...............frame.................rate
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a word will be shown for a second, then, an image will be shown. Participant have to choose whether this image represent the word or not by pressing `z` if yes, 'x' if no

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent instruct
      font = Noto sans
      letterHeight = 0.07
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = image == word? press `z` if yes, `x` if no
      units = norm
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    TextComponent plusblank
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
      units = norm
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterselect
    RoutineSettingsComponent letterselect
      saveStartStop = False
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    ImageComponent imageword
      image [set every repeat] = $imgdir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent instructor
      font = Noto sans
      letterHeight = 0.07
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = image == word? press `z` if yes, `x` if no
      units = norm
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    TextComponent plus
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wordshow
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    ImageComponent image
      image [set every repeat] = $worddir
      pos = (-0.5, 0)
      size = (1, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent instructt
      font = Noto sans
      letterHeight = 0.07
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = image == word? press `z` if yes, `x` if no
      units = norm
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    TextComponent plsuer
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imgorder_en.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 2, 'wordid': 87, 'truestate': 0, 'worddir': 'word/worden0871.png', 'imgdir': 'image/False/imgf87.png'},
      {'lang': 2, 'wordid': 93, 'truestate': 0, 'worddir': 'word/worden0931.png', 'imgdir': 'image/False/imgf93.png'},
      {'lang': 2, 'wordid': 23, 'truestate': 0, 'worddir': 'word/worden0231.png', 'imgdir': 'image/False/imgf23.png'},
      {'lang': 2, 'wordid': 10, 'truestate': 1, 'worddir': 'word/worden0101.png', 'imgdir': 'image/True/img10.png'},
      {'lang': 2, 'wordid': 50, 'truestate': 0, 'worddir': 'word/worden0501.png', 'imgdir': 'image/False/imgf50.png'},
      {'lang': 2, 'wordid': 33, 'truestate': 1, 'worddir': 'word/worden0331.png', 'imgdir': 'image/True/img33.png'},
      {'lang': 2, 'wordid': 95, 'truestate': 0, 'worddir': 'word/worden0951.png', 'imgdir': 'image/False/imgf95.png'},
      {'lang': 2, 'wordid': 7, 'truestate': 0, 'worddir': 'word/worden0071.png', 'imgdir': 'image/False/imgf07.png'},
      {'lang': 2, 'wordid': 28, 'truestate': 1, 'worddir': 'word/worden0281.png', 'imgdir': 'image/True/img28.png'},
      {'lang': 2, 'wordid': 38, 'truestate': 1, 'worddir': 'word/worden0381.png', 'imgdir': 'image/True/img38.png'},
      {'lang': 2, 'wordid': 33, 'truestate': 0, 'worddir': 'word/worden0331.png', 'imgdir': 'image/False/imgf33.png'},
      {'lang': 2, 'wordid': 76, 'truestate': 1, 'worddir': 'word/worden0761.png', 'imgdir': 'image/True/img76.png'},
      {'lang': 2, 'wordid': 75, 'truestate': 0, 'worddir': 'word/worden0751.png', 'imgdir': 'image/False/imgf75.png'}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
    Routine blank1sec
    Routine wordshow
    Routine blank1sec
    Routine letterselect
  LoopTerminator trials
  Routine ending
