PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Mergisauneg frmae rtae fo sceren, hpoefluy
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a word will be shown and subject have to choose whether this word is a real word or not
        press 'z' if it's a real word, press 'x' if it's not a real word

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent instructblank
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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      text [set every repeat]:
        Is this a real word?

        press `z` if yes, `x` if no
    TextComponent cross1
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letterselect
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    ImageComponent imageword
      image [set every repeat] = $worddir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Is this a real word?

        press `z` if yes, `x` if no
    TextComponent cross2
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = +
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordorderth_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 1, 'stimuli': 2, 'imageid': 93, 'worddir': 'word/wordth0932.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 61, 'worddir': 'word/wordth0613.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 63, 'worddir': 'word/wordth0632.png'},
      {'lang': 1, 'stimuli': 1, 'imageid': 66, 'worddir': 'word/wordth0661.png'},
      {'lang': 1, 'stimuli': 1, 'imageid': 27, 'worddir': 'word/wordth0271.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 'c1', 'worddir': 'word/wordthc103.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 44, 'worddir': 'word/wordth0442.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 6, 'worddir': 'word/wordth0063.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 63, 'worddir': 'word/wordth0633.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 28, 'worddir': 'word/wordth0283.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 44, 'worddir': 'word/wordth0443.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 89, 'worddir': 'word/wordth0892.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 50, 'worddir': 'word/wordth0503.png'},
      {'lang': 1, 'stimuli': 1, 'imageid': 28, 'worddir': 'word/wordth0281.png'},
      {'lang': 1, 'stimuli': 3, 'imageid': 89, 'worddir': 'word/wordth0893.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 3, 'worddir': 'word/wordth0032.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 22, 'worddir': 'word/wordth0222.png'},
      {'lang': 1, 'stimuli': 2, 'imageid': 82, 'worddir': 'word/wordth0822.png'},
      {'lang': 1, 'stimuli': 1, 'imageid': '75a', 'worddir': 'word/wordth75a1.png'},
      {'lang': 1, 'stimuli': 1, 'imageid': 68, 'worddir': 'word/wordth0681.png'}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
    Routine blank1sec
    Routine letterselect
  LoopTerminator trials
  Routine ending
