PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring frame rate of screen, maybe?
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, two letter will be shown with an interval of one second, then, the participant will choose which letter is an English or Thai letter.
        press 'z' if it's a first letter, press 'x' if it's a second letter

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letter2
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    ImageComponent image_second
      image [set every repeat] = $seconddir
      pos = (-0.5, 0)
      saveStartStop = False
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine letter1
    RoutineSettingsComponent letter1
      saveStartStop = False
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    ImageComponent image_first
      image [set every repeat] = $firstdir
      pos = (-0.5, 0)
      saveStartStop = False
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine letterselect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    TextComponent text_2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $asking
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      font = Noto Sans
      letterHeight = 0.07
      pos = (-0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        z = first letter
        x = second letter
Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letterorder.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 1, 'langpair': 3, 'sequence': 2, 'pairid': 1, 'firstdir': 'letter/lettgr073.png', 'seconddir': 'letter/lettth025.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 1, 'pairid': 3, 'firstdir': 'letter/letten041.png', 'seconddir': 'letter/lettth022.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 2, 'pairid': 7, 'firstdir': 'letter/lettkh035.png', 'seconddir': 'letter/lettth091.png'},
      {'lang': 2, 'langpair': 3, 'sequence': 1, 'pairid': 6, 'firstdir': 'letter/letten071.png', 'seconddir': 'letter/lettkh055.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 1, 'pairid': 8, 'firstdir': 'letter/lettth154.png', 'seconddir': 'letter/lettkh035.png'},
      {'lang': 1, 'langpair': 3, 'sequence': 1, 'pairid': 3, 'firstdir': 'letter/lettth171.png', 'seconddir': 'letter/lettgr067.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 2, 'pairid': 5, 'firstdir': 'letter/lettgr066.png', 'seconddir': 'letter/letten062.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 1, 'pairid': 3, 'firstdir': 'letter/letten041.png', 'seconddir': 'letter/lettth022.png'},
      {'lang': 2, 'langpair': 2, 'sequence': 1, 'pairid': 5, 'firstdir': 'letter/letten062.png', 'seconddir': 'letter/lettgr066.png'},
      {'lang': 1, 'langpair': 3, 'sequence': 1, 'pairid': 5, 'firstdir': 'letter/lettth182.png', 'seconddir': 'letter/lettgr072.png'},
      {'lang': 2, 'langpair': 1, 'sequence': 1, 'pairid': 6, 'firstdir': 'letter/letten101.png', 'seconddir': 'letter/lettth011.png'}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
    Routine blank1sec
    Routine letter1
    Routine blank1sec
    Routine letter2
    Routine letterselect
  LoopTerminator trials
  Routine ending
