PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  backgroundFit = contain
  expName = MainFlow
  frameRateMsg = Measuring frame rate of screen, maybe?
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        *For the observer

        In this experiment, a letter will be shown with an interval of one second, then, the participant will choose whether is an  English or Thai letter.
        press 'z' if it's a yes, press 'x' if it's a no

        press spacebar to start a trial
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    TextComponent cross
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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    TextComponent in1
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $asking + "\nz = yes, x = no"
      units = norm
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letter2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    ImageComponent image_second
      image [set every repeat] = $seconddir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent in3
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $asking + "\nz = first, x = second"
      units = norm
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    TextComponent cross_3
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine letter1
    RoutineSettingsComponent letter1
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    ImageComponent image_first
      image [set every repeat] = $firstdir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent in2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $asking + "\nz = yes, x = no"
      units = norm
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    TextComponent cross_2
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = norm
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  Routine blanknext
    RoutineSettingsComponent blanknext
      stopVal [duration (s)] = 0.2
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    TextComponent instruct_2
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $asking + "\nz = yes, x = no"
      units = norm
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    TextComponent cross_5
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
      units = norm
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  Routine letterselect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        asking = "nothing"
      Begin Routine:
        asking = "nothing"
        if lang == 1:
            asking = "Which letter is Thai?"
        else:
            asking = "Which letter is English?"
    ImageComponent image_first_2
      image [set every repeat] = $firstdir
      pos = (-0.5, 0)
      size = (None,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent instruct
      font = Noto sans
      letterHeight = 0.08
      pos = (-0.5, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $asking + "\nz = yes, x = no"
      units = norm
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    TextComponent cross_4
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letterorder_th.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'lang': 1, 'langpair': 1, 'sequence': 2, 'pairid': 1, 'firstdir': 'letter/letten092.png', 'seconddir': 'letter/lettth022.png'},
      {'lang': 1, 'langpair': 3, 'sequence': 2, 'pairid': 8, 'firstdir': 'letter/lettgr153.png', 'seconddir': 'letter/lettth013.png'},
      {'lang': 1, 'langpair': 1, 'sequence': 2, 'pairid': 1, 'firstdir': 'letter/letten092.png', 'seconddir': 'letter/lettth022.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 2, 'pairid': 4, 'firstdir': 'letter/lettkh034.png', 'seconddir': 'letter/lettth153.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 2, 'pairid': 4, 'firstdir': 'letter/lettkh034.png', 'seconddir': 'letter/lettth153.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 1, 'pairid': 7, 'firstdir': 'letter/lettth072.png', 'seconddir': 'letter/lettkh033.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 1, 'pairid': 2, 'firstdir': 'letter/lettth032.png', 'seconddir': 'letter/lettkh032.png'},
      {'lang': 1, 'langpair': 3, 'sequence': 1, 'pairid': 4, 'firstdir': 'letter/lettth024.png', 'seconddir': 'letter/lettgr064.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 1, 'pairid': 5, 'firstdir': 'letter/lettth024.png', 'seconddir': 'letter/lettkh023.png'},
      {'lang': 1, 'langpair': 1, 'sequence': 2, 'pairid': 5, 'firstdir': 'letter/letten041.png', 'seconddir': 'letter/lettth152.png'},
      {'lang': 1, 'langpair': 2, 'sequence': 2, 'pairid': 6, 'firstdir': 'letter/lettkh033.png', 'seconddir': 'letter/lettth161.png'}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
    Routine letterselect
    Routine blanknext
  LoopTerminator trials
  Routine ending
