PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = MainFlow
  frameRateMsg = Measuring frame rate of screen, hold tight
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine image
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    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = C:/Users/PH/Downloads/480689294_23872609285659295_1172895884626913474_n.jpg
      pos = (0.3, 0.3)
      size = (0.5,None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine tutorial
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    TextComponent text_norm
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this experiment, an image will be shown followed by 2 words at the left and right of the screen in which subject will choose whether the left or right word are an acutal word

        press 'z' if it's a left word, press 'x' if it's a right one

        press spacebar to start a trial"
    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine value_test
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  Routine blank1sec
    RoutineSettingsComponent blank1sec
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine blank2sec
    RoutineSettingsComponent blank2sec
      saveStartStop = False
      stopVal [duration (s)] = 2
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  Routine ending
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        End of the experiment

        press spacebar to exit
    KeyboardComponent ending_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_img
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    ImageComponent image_3
      image = demo/tutorimg.png
      pos = (0, 0.3)
      size = (None, 1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_4
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        As explained before, the image will be shown for a certain period of time, then, two words will appear. Click on the word that best explain the image

        press spacebar to start the experiment
  Routine imgshow
    RoutineSettingsComponent imgshow
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        imageloc = f"image/img{id:03d}.png"
    ImageComponent image_2
      image [set every repeat] = $imageloc
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine wordselect
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        correctdir = f"text/word{pref}{id:03d}1.png"
        falsedir = imageloc = f"text/word{pref}{id:03d}{falseword}.png"
        if side == 0:
            leftword = correctdir
            rightword = falsedir
        else:
            leftword = falsedir
            rightword = correctdir
    ImageComponent image_left
      image [set every repeat] = $leftword
      pos = (-0.75, -0.3)
      saveStartStop = False
      size = (0.25, None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_right
      image [set every repeat] = $rightword
      pos = (-0.25, -0.3)
      saveStartStop = False
      size = (0.25, None)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent text_2
      font = Noto sans
      letterHeight = 0.1
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which word describe previous image the best?
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'z','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine langselect
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    KeyboardComponent langchoice
      allowedKeys = '1', '2'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        langmessage = ""
      Each Frame:
        if langchoice.keys == '1':
           langmessage = 'EN (english) language selected'
           pref = "en"
        elif langchoice.keys == '2':
           langmessage = 'TH (thai) language selected'
           pref = "th"
        else:
            langmessage = f'did you press "{langchoice.keys}"? let me just get an english one for you'
            pref = "en"
    TextComponent text_5
      font = Noto Sans
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $langchoice.keys == '1' or langchoice.keys =='2'
      units = norm
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      text:
        Setting up language

        press 1 for English trials, press 2 for Thai trials
    TextComponent text_6
      font = Noto Sans
      letterHeight = 0.08
      startVal [condition] = $langchoice.keys == '1' or langchoice.keys == '2'
      text [set every frame] = $langmessage + "\n\n press spacebar to continue"
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine langselect
  Routine tutorial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = taskorder.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('id', 17), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 4), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 39), ('side', 0), ('falseword', 4)]),
      OrderedDict([('id', 13), ('side', 0), ('falseword', 2)]),
      OrderedDict([('id', 35), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 29), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 39), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 13), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 5), ('side', 1), ('falseword', 4)]),
      OrderedDict([('id', 3), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 37), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 6), ('side', 1), ('falseword', 4)]),
      OrderedDict([('id', 20), ('side', 0), ('falseword', 2)]),
      OrderedDict([('id', 26), ('side', 0), ('falseword', 4)]),
      OrderedDict([('id', 2), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 31), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 6), ('side', 1), ('falseword', 3)]),
      OrderedDict([('id', 17), ('side', 1), ('falseword', 4)]),
      OrderedDict([('id', 29), ('side', 1), ('falseword', 4)]),
      OrderedDict([('id', 17), ('side', 0), ('falseword', 3)]),
      OrderedDict([('id', 28), ('side', 0), ('falseword', 3)]),
      OrderedDict([('id', 38), ('side', 0), ('falseword', 4)]),
      OrderedDict([('id', 20), ('side', 1), ('falseword', 4)]),
      OrderedDict([('id', 22), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 21), ('side', 1), ('falseword', 2)]),
      OrderedDict([('id', 18), ('side', 1), ('falseword', 3)])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
    Routine blank1sec
    Routine imgshow
    Routine blank2sec
    Routine wordselect
  LoopTerminator trials
  Routine ending
